// This CellML file was generated on 6/12/2012 at 8:31:28 at p.m. using:
//
// COR (0.9.31.1409)
// Copyright 2002-2012 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// publisher: National University of Singapore
// created: W3CDTF 2007-09-10T00:00:00+00:00
// creator: Orgname National University of Singapore; Orgunit Division of BioEngineering; albertocorrias@nus.edu.sg; Given Alberto; Family Corrias
def model SM_model as
  // A quantitative model of gastric smooth muscle cellular activation
  //
  // Alberto Corrias
  //
  // Division of Bioengineering, National University of Singapore
  //
  // Model Status
  //
  // This CellML version of the model has been encoded by the model author, Alberto Corrias, and is known to produce correct results in JSim and CellMLSimulator. It also passes the online PyCml validation tests with no errors or warnings. This model includes the specification of four pseudo ICC stimulus pulses with a 20s period. More information and simulation results can be found at the Computational Bioengineering Laboratory (http://www.bioeng.nus.edu.sg/compbiolab/projects/gi-project.html#sm-cell-ephys).
  //
  // Model Structure
  //
  // The coordinated activity of the enteric nervous system (ENS), interstitial cells of Cajal (ICC), and smooth muscle (SM) cells is required to generate gastric motility. While the ICC provide a constant source of electrical activity, and can be regarded as the pacemaker of the gastrointestinal (GI) system, the ENS adds an extra level of control. In combination the ICC and ENS act as a stimulus, causing the SM cells to contract and generate slow wave activity in the GI. These regular, autonomous depolarisations are then propagated via gap junctions to the neighbouring SM cells in the gut wall.
  //
  // SM cells themselves are unable to generate or propagate slow waves autonomously. Instead they response to the electrical stimuli generated by neighbouring ICC as voltage-dependent ion channels embedded within their cell surface membrane become activated and other extracellular ligands and intracellular second messengers (such as calcium ions) also modify the response of the SM cells. As such, the inherent complexity of such a system quickly becomes apparent, and the role of mathematical models in dissecting the system and characterising the different functions of each individual component becomes clear. However, while computational models of cardiac electrophysiology have advanced considerably over the past few years, to date, models of gastric electrophysiology have been limited by the absence of single cell models which form the foundation for the more complex, large scale, integrated models.
  //
  // In the present study Alberto Corrias and Martin Buist address this issue by presenting an electrophysiolgical model of a single gastric SM cell. The model parameters are based on real, experimentally recorded, physiological data, and the model has also been kept relatively simple to make it computationally efficient, and therefore suitable for embedding within multicellular simulations.
  //
  // model diagram
  //
  // Schematic diagram of the model.
  //
  // The complete original paper reference is cited below:
  //
  // A quantitative model of gastric smooth muscle cellular activation, Alberto Corrias and Martin L. Buist, 2007, Annals of Biomedical Engineering, 35, 1595-1607. PubMed ID: 17486452 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=17486452&query_hl=1&itool=pubmed_docsum)
  def unit conductance_units as
    unit siemens {pref: nano};
  enddef;
  def unit millifarads as
    unit farad {pref: milli};
  enddef;
  def unit voltage_units as
    unit volt {pref: milli};
  enddef;
  def unit volume_units as
    unit meter {pref: micro, expo: 3};
  enddef;
  def unit Inverse_Voltage_units as
    unit voltage_units {expo: -1};
  enddef;
  def unit Inverse_Voltage_Units_per_time_units as
    unit Inverse_Voltage_units;
    unit time_units {expo: -1};
  enddef;
  def unit time_units as
    unit second;
  enddef;
  def unit current_units as
    unit voltage_units;
    unit conductance_units;
  enddef;
  def unit rate_constants_units as
    unit time_units {expo: -1};
  enddef;
  def unit capacitance_units as
    unit farad {pref: pico};
  enddef;
  def unit Temperature_units as
    unit kelvin;
  enddef;
  def unit Inverse_Temperature_units_times_conductance as
    unit Temperature_units {expo: -1};
    unit conductance_units;
  enddef;
  def unit F_units as
    unit mole {expo: -1};
    unit coulomb;
  enddef;
  def unit R_units as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit litre;
    unit mole {pref: milli, expo: -1};
  enddef;
  def unit millimolar_per_millisecond as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit second {pref: milli, expo: -1};
  enddef;
  def unit millimolar_per_millisecond_per_millivolt as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit second {expo: -1};
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit mole_to_millimole as
    unit mole;
    unit mole {pref: milli, expo: -1};
  enddef;

  def comp Time as
    var time: time_units {pub: out, priv: out};
  enddef;

  def comp Neural_input as
    var Ach: millimolar {init: 0.00001, pub: out, priv: out};
  enddef;

  def comp Gap_junction as
    var Gcouple: conductance_units {init: 1.3, pub: out, priv: out};
  enddef;

  def comp Environment as
    var T: Temperature_units {init: 310, priv: out};
    var T_exp: Temperature_units {init: 297, priv: out};
    var F: F_units {init: 96486, pub: out, priv: out};
    var R: R_units {init: 8314.4, priv: out};
    var Q10Ca: dimensionless {init: 2.1, priv: out};
    var Q10K: dimensionless {init: 1.365, priv: out};
    var Q10Na: dimensionless {init: 2.45, priv: out};
    var Ca_o: millimolar {init: 2.5, pub: out, priv: out};
    var Na_o: millimolar {init: 137, pub: out, priv: out};
    var K_o: millimolar {init: 5.9, pub: out, priv: out};
    var T_correction_Na: dimensionless {pub: out, priv: out};
    var T_correction_K: dimensionless {pub: out, priv: out};
    var T_correction_Ca: dimensionless {pub: out, priv: out};
    var T_correction_BK: conductance_units {pub: out, priv: out};
    var FoRT: Inverse_Voltage_units {pub: out, priv: out};
    var RToF: voltage_units {pub: out, priv: out};
    FoRT = F/(R*T);
    RToF = R*T/F;
    T_correction_Ca = pow(Q10Ca, (T-T_exp)/10{Temperature_units});
    T_correction_K = pow(Q10K, (T-T_exp)/10{Temperature_units});
    T_correction_Na = pow(Q10Na, (T-T_exp)/10{Temperature_units});
    T_correction_BK = 1.1{Inverse_Temperature_units_times_conductance}*(T-T_exp);
  enddef;

  def comp SM_Membrane as
    var Cm_SM: capacitance_units {init: 77};
    var Vol_SM: volume_units {init: 3500, pub: out, priv: out};
    var Vm_SM: voltage_units {init: -69.75, priv: out};
    var time: time_units {pub: in, priv: out};
    var Ca_i: millimolar {init: 0.00008, priv: out};
    var Na_i: millimolar {init: 10, pub: out, priv: out};
    var K_i: millimolar {init: 164, priv: out};
    var Ca_o: millimolar {pub: in, priv: out};
    var Ach: millimolar {pub: in, priv: out};
    var Na_o: millimolar {pub: in, priv: out};
    var K_o: millimolar {pub: in, priv: out};
    var T_correction_Ca: dimensionless {pub: in, priv: out};
    var T_correction_Na: dimensionless {pub: in, priv: out};
    var T_correction_K: dimensionless {pub: in, priv: out};
    var T_correction_BK: conductance_units {pub: in, priv: out};
    var RToF: voltage_units {pub: in, priv: out};
    var FoRT: Inverse_Voltage_units {pub: in, priv: out};
    var F: F_units {pub: in, priv: out};
    var I_Na_SM: current_units {priv: in};
    var I_Ltype_SM: current_units {priv: in};
    var I_LVA_SM: current_units {priv: in};
    var I_kr_SM: current_units {priv: in};
    var I_ka_SM: current_units {priv: in};
    var I_BK_SM: current_units {priv: in};
    var I_NSCC_SM: current_units {priv: in};
    var I_bk_SM: current_units {priv: in};
    var J_CaSR_SM: millimolar_per_millisecond {priv: in};
    var I_stim: current_units {pub: in};
    ode(Vm_SM, time) = -1{dimensionless}*1{dimensionless}/Cm_SM*(I_Na_SM+I_Ltype_SM+I_LVA_SM+I_kr_SM+I_ka_SM+I_BK_SM+I_NSCC_SM+I_bk_SM+(-1{dimensionless}*I_stim));
    ode(Ca_i, time) = (-1{dimensionless}*I_Ltype_SM+(-1{dimensionless}*I_LVA_SM))/(2{dimensionless}*0.001{mole_to_millimole}*F*Vol_SM)+(-1{dimensionless}*J_CaSR_SM);
  enddef;

  def comp I_stim as
    var time: time_units {pub: in};
    var local_time: time_units;
    var period: time_units {init: 20};
    var stim_start: time_units;
    var delta_VICC: voltage_units {init: 59};
    var Gcouple: conductance_units {pub: in};
    var t_ICCpeak: time_units {init: 0.098};
    var t_ICCplateau: time_units {init: 7.582};
    var t_ICC_stimulus: time_units {init: 10};
    var V_decay: voltage_units {init: 37.25};
    var I_stim: current_units {pub: out};
    stim_start = sel
      case (time > period*1{dimensionless}) and (time <= period*2{dimensionless}):
        period*1{dimensionless};
      case (time > period*2{dimensionless}) and (time <= period*3{dimensionless}):
        period*2{dimensionless};
      case (time > period*3{dimensionless}) and (time <= period*4{dimensionless}):
        period*3{dimensionless};
      case (time > period*4{dimensionless}) and (time <= period*5{dimensionless}):
        period*4{dimensionless};
      otherwise:
        0{time_units};
    endsel;
    local_time = time-(stim_start+t_ICCpeak);
    I_stim = sel
      case local_time < t_ICCpeak:
        Gcouple*delta_VICC;
      case (local_time >= t_ICCpeak) and (local_time <= t_ICCplateau):
        Gcouple*delta_VICC*1{dimensionless}/(1{dimensionless}+exp((local_time-8{time_units})/1{time_units}));
      case (local_time > t_ICCplateau) and (local_time < t_ICC_stimulus):
        Gcouple*V_decay*1{dimensionless}/(1{dimensionless}+exp((local_time-8{time_units})/0.15{time_units}));
      otherwise:
        0{current_units};
    endsel;
  enddef;

  def comp d_Ltype_SM as
    var Vm_SM: voltage_units {pub: in};
    var d_inf_Ltype_SM: dimensionless;
    var tau_d_Ltype_SM: time_units;
    var d_Ltype_SM: dimensionless {init: 0, pub: out};
    var time: time_units {pub: in};
    var T_correction_Ca: dimensionless {pub: in};
    d_inf_Ltype_SM = 1{dimensionless}/(1{dimensionless}+exp((Vm_SM+17{voltage_units})/(-4.3{voltage_units})));
    tau_d_Ltype_SM = T_correction_Ca*0.00047{time_units};
    ode(d_Ltype_SM, time) = (d_inf_Ltype_SM-d_Ltype_SM)/tau_d_Ltype_SM;
  enddef;

  def comp f_Ltype_SM as
    var Vm_SM: voltage_units {pub: in};
    var f_inf_Ltype_SM: dimensionless;
    var tau_f_Ltype_SM: time_units;
    var f_Ltype_SM: dimensionless {init: 0.95, pub: out};
    var time: time_units {pub: in};
    var T_correction_Ca: dimensionless {pub: in};
    f_inf_Ltype_SM = 1{dimensionless}/(1{dimensionless}+exp((Vm_SM+43{voltage_units})/8.9{voltage_units}));
    tau_f_Ltype_SM = T_correction_Ca*0.086{time_units};
    ode(f_Ltype_SM, time) = (f_inf_Ltype_SM-f_Ltype_SM)/tau_f_Ltype_SM;
  enddef;

  def comp f_ca_Ltype_SM as
    var Ca_i: millimolar {pub: in};
    var f_ca_inf_Ltype_SM: dimensionless;
    var tau_f_ca_Ltype_SM: time_units;
    var f_ca_Ltype_SM: dimensionless {init: 1, pub: out};
    var time: time_units {pub: in};
    var T_correction_Ca: dimensionless {pub: in};
    f_ca_inf_Ltype_SM = 1{dimensionless}-1{dimensionless}/(1{dimensionless}+exp((Ca_i-0.00008999{millimolar}-0.000214{millimolar})/(-0.0000131{millimolar})));
    tau_f_ca_Ltype_SM = T_correction_Ca*0.002{time_units};
    ode(f_ca_Ltype_SM, time) = (f_ca_inf_Ltype_SM-f_ca_Ltype_SM)/tau_f_ca_Ltype_SM;
  enddef;

  def comp I_Ltype_SM as
    var I_Ltype_SM: current_units {pub: out};
    var E_Ca: voltage_units;
    var G_max_Ltype: conductance_units {init: 65};
    var Vm_SM: voltage_units {pub: in, priv: out};
    var f_Ltype_SM: dimensionless {priv: in};
    var d_Ltype_SM: dimensionless {priv: in};
    var f_ca_Ltype_SM: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in, priv: out};
    var T_correction_Ca: dimensionless {pub: in, priv: out};
    var time: time_units {pub: in, priv: out};
    E_Ca = 0.5{dimensionless}*RToF*ln(Ca_o/Ca_i);
    I_Ltype_SM = G_max_Ltype*f_Ltype_SM*d_Ltype_SM*f_ca_Ltype_SM*(Vm_SM-E_Ca);
  enddef;

  def comp J_CaSR_SM as
    var J_CaSR_SM: millimolar_per_millisecond {pub: out};
    var J_max_CaSR: millimolar_per_millisecond {init: 317.05};
    var Ca_i: millimolar {pub: in};
    J_CaSR_SM = J_max_CaSR*pow(Ca_i*1{per_millimolar}, 1.34{dimensionless});
  enddef;

  def comp d_LVA_SM as
    var Vm_SM: voltage_units {pub: in};
    var d_inf_LVA_SM: dimensionless;
    var tau_d_LVA_SM: time_units;
    var d_LVA_SM: dimensionless {init: 0.02, pub: out};
    var time: time_units {pub: in};
    var T_correction_Ca: dimensionless {pub: in};
    d_inf_LVA_SM = 1{dimensionless}/(1{dimensionless}+exp((Vm_SM+27.5{voltage_units})/(-10.9{voltage_units})));
    tau_d_LVA_SM = T_correction_Ca*0.003{time_units};
    ode(d_LVA_SM, time) = (d_inf_LVA_SM-d_LVA_SM)/tau_d_LVA_SM;
  enddef;

  def comp f_LVA_SM as
    var Vm_SM: voltage_units {pub: in};
    var f_inf_LVA_SM: dimensionless;
    var tau_f_LVA_SM: time_units;
    var f_LVA_SM: dimensionless {init: 0.99, pub: out};
    var time: time_units {pub: in};
    var T_correction_Ca: dimensionless {pub: in};
    f_inf_LVA_SM = 1{dimensionless}/(1{dimensionless}+exp((Vm_SM+15.8{voltage_units})/7{voltage_units}));
    tau_f_LVA_SM = T_correction_Ca*0.00758{time_units}*exp(Vm_SM*0.00817{Inverse_Voltage_units});
    ode(f_LVA_SM, time) = (f_inf_LVA_SM-f_LVA_SM)/tau_f_LVA_SM;
  enddef;

  def comp I_LVA_SM as
    var I_LVA_SM: current_units {pub: out};
    var E_Ca: voltage_units;
    var G_max_LVA: conductance_units {init: 0.18};
    var Vm_SM: voltage_units {pub: in, priv: out};
    var f_LVA_SM: dimensionless {priv: in};
    var d_LVA_SM: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var T_correction_Ca: dimensionless {pub: in, priv: out};
    var time: time_units {pub: in, priv: out};
    E_Ca = 0.5{dimensionless}*RToF*ln(Ca_o/Ca_i);
    I_LVA_SM = G_max_LVA*f_LVA_SM*d_LVA_SM*(Vm_SM-E_Ca);
  enddef;

  def comp d_BK_SM as
    var Vm_SM: voltage_units {pub: in};
    var Ca_i: millimolar {pub: in};
    var d_BK_SM: dimensionless {pub: out};
    var time: time_units {pub: in};
    d_BK_SM = 1{dimensionless}/(1{dimensionless}+exp(Vm_SM/(-17{voltage_units})-2{dimensionless}*ln(Ca_i/0.001{millimolar})));
  enddef;

  def comp I_BK_SM as
    var I_BK_SM: current_units {pub: out};
    var Ca_i: millimolar {pub: in, priv: out};
    var E_K: voltage_units;
    var G_max_BK: conductance_units {init: 45.7};
    var Vm_SM: voltage_units {pub: in, priv: out};
    var d_BK_SM: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var T_correction_BK: conductance_units {pub: in};
    var time: time_units {pub: in, priv: out};
    E_K = RToF*ln(K_o/K_i);
    I_BK_SM = (G_max_BK+T_correction_BK)*d_BK_SM*(Vm_SM-E_K);
  enddef;

  def comp I_bk_SM as
    var I_bk_SM: current_units {pub: out};
    var E_K: voltage_units;
    var G_max_bk: conductance_units {init: 0.0144};
    var Vm_SM: voltage_units {pub: in};
    var RToF: voltage_units {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    E_K = RToF*ln(K_o/K_i);
    I_bk_SM = G_max_bk*(Vm_SM-E_K);
  enddef;

  def comp xr1_SM as
    var Vm_SM: voltage_units {pub: in};
    var xr1_inf_SM: dimensionless;
    var tau_xr1_SM: time_units;
    var xr1_SM: dimensionless {init: 0, pub: out};
    var time: time_units {pub: in};
    var T_correction_K: dimensionless {pub: in};
    xr1_inf_SM = 1{dimensionless}/(1{dimensionless}+exp((Vm_SM+27{voltage_units})/(-5{voltage_units})));
    tau_xr1_SM = T_correction_K*0.08{time_units};
    ode(xr1_SM, time) = (xr1_inf_SM-xr1_SM)/tau_xr1_SM;
  enddef;

  def comp xr2_SM as
    var Vm_SM: voltage_units {pub: in};
    var xr2_inf_SM: dimensionless;
    var tau_xr2_SM: time_units;
    var xr2_SM: dimensionless {init: 0.82, pub: out};
    var time: time_units {pub: in};
    var T_correction_K: dimensionless {pub: in};
    xr2_inf_SM = 0.2{dimensionless}+0.8{dimensionless}/(1{dimensionless}+exp((Vm_SM+58{voltage_units})/10{voltage_units}));
    tau_xr2_SM = T_correction_K*(-0.707{time_units}+1.481{time_units}*exp((Vm_SM+36{voltage_units})/95{voltage_units}));
    ode(xr2_SM, time) = (xr2_inf_SM-xr2_SM)/tau_xr2_SM;
  enddef;

  def comp I_kr_SM as
    var I_kr_SM: current_units {pub: out};
    var E_K: voltage_units;
    var G_max_kr_SM: conductance_units {init: 35};
    var Vm_SM: voltage_units {pub: in, priv: out};
    var xr1_SM: dimensionless {priv: in};
    var xr2_SM: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var T_correction_K: dimensionless {pub: in, priv: out};
    var time: time_units {pub: in, priv: out};
    E_K = RToF*ln(K_o/K_i);
    I_kr_SM = G_max_kr_SM*xr1_SM*xr2_SM*(Vm_SM-E_K);
  enddef;

  def comp m_Na_SM as
    var Vm_SM: voltage_units {pub: in};
    var m_inf_Na: dimensionless;
    var tau_m_Na: time_units;
    var m_Na_SM: dimensionless {init: 0.005, pub: out};
    var time: time_units {pub: in};
    var T_correction_Na: dimensionless {pub: in};
    m_inf_Na = 1{dimensionless}/(1{dimensionless}+exp((Vm_SM+47{voltage_units})/(-4.8{voltage_units})));
    tau_m_Na = T_correction_Na*(Vm_SM*(-0.017{Inverse_Voltage_units})*0.001{time_units}+0.00044{time_units});
    ode(m_Na_SM, time) = (m_inf_Na-m_Na_SM)/tau_m_Na;
  enddef;

  def comp h_Na_SM as
    var Vm_SM: voltage_units {pub: in};
    var h_inf_Na: dimensionless;
    var tau_h_Na: time_units;
    var h_Na_SM: dimensionless {init: 0.05787, pub: out};
    var time: time_units {pub: in};
    var T_correction_Na: dimensionless {pub: in};
    h_inf_Na = 1{dimensionless}/(1{dimensionless}+exp((Vm_SM+78{voltage_units})/3{voltage_units}));
    tau_h_Na = T_correction_Na*(Vm_SM*(-0.25{Inverse_Voltage_units})*0.001{time_units}+0.0055{time_units});
    ode(h_Na_SM, time) = (h_inf_Na-h_Na_SM)/tau_h_Na;
  enddef;

  def comp I_Na_SM as
    var I_Na_SM: current_units {pub: out};
    var E_Na: voltage_units;
    var G_max_Na_SM: conductance_units {init: 3};
    var Vm_SM: voltage_units {pub: in, priv: out};
    var h_Na_SM: dimensionless {priv: in};
    var m_Na_SM: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var T_correction_Na: dimensionless {pub: in, priv: out};
    var time: time_units {pub: in, priv: out};
    E_Na = RToF*ln(Na_o/Na_i);
    I_Na_SM = G_max_Na_SM*h_Na_SM*m_Na_SM*(Vm_SM-E_Na);
  enddef;

  def comp xa1_SM as
    var Vm_SM: voltage_units {pub: in};
    var xa1_inf_SM: dimensionless;
    var tau_xa1_SM: time_units;
    var xa1_SM: dimensionless {init: 0.00414, pub: out};
    var time: time_units {pub: in};
    var T_correction_K: dimensionless {pub: in};
    xa1_inf_SM = 1{dimensionless}/(1{dimensionless}+exp((Vm_SM+26.5{voltage_units})/(-7.9{voltage_units})));
    tau_xa1_SM = T_correction_K*(0.0318{time_units}+0.175{time_units}*exp(-0.5{dimensionless}*sqr((Vm_SM+44.4{voltage_units})/22.3{voltage_units})));
    ode(xa1_SM, time) = (xa1_inf_SM-xa1_SM)/tau_xa1_SM;
  enddef;

  def comp xa2_SM as
    var Vm_SM: voltage_units {pub: in};
    var xa2_inf_SM: dimensionless;
    var tau_xa2_SM: time_units;
    var xa2_SM: dimensionless {init: 0.72, pub: out};
    var time: time_units {pub: in};
    var T_correction_K: dimensionless {pub: in};
    xa2_inf_SM = 0.1{dimensionless}+0.9{dimensionless}/(1{dimensionless}+exp((Vm_SM+65{voltage_units})/6.2{voltage_units}));
    tau_xa2_SM = T_correction_K*0.09{time_units};
    ode(xa2_SM, time) = (xa2_inf_SM-xa2_SM)/tau_xa2_SM;
  enddef;

  def comp I_ka_SM as
    var I_ka_SM: current_units {pub: out};
    var E_K: voltage_units;
    var G_max_ka_SM: conductance_units {init: 9};
    var Vm_SM: voltage_units {pub: in, priv: out};
    var xa1_SM: dimensionless {priv: in};
    var xa2_SM: dimensionless {priv: in};
    var RToF: voltage_units {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var T_correction_K: dimensionless {pub: in, priv: out};
    var time: time_units {pub: in, priv: out};
    E_K = RToF*ln(K_o/K_i);
    I_ka_SM = G_max_ka_SM*xa1_SM*xa2_SM*(Vm_SM-E_K);
  enddef;

  def comp m_NSCC_SM as
    var Vm_SM: voltage_units {pub: in};
    var m_inf_NSCC_SM: dimensionless;
    var tau_m_NSCC_SM: time_units;
    var m_NSCC_SM: dimensionless {init: 0, pub: out};
    var time: time_units {pub: in};
    m_inf_NSCC_SM = 1{dimensionless}/(1{dimensionless}+exp((Vm_SM+25{voltage_units})/(-20{voltage_units})));
    tau_m_NSCC_SM = 1{dimensionless}/(1{dimensionless}+exp((Vm_SM+66{voltage_units})/(-26{voltage_units})))*0.15{time_units};
    ode(m_NSCC_SM, time) = (m_inf_NSCC_SM-m_NSCC_SM)/tau_m_NSCC_SM;
  enddef;

  def comp I_NSCC_SM as
    var I_NSCC_SM: current_units {pub: out};
    var E_NSCC: voltage_units {init: -28};
    var G_max_NSCC_SM: conductance_units {init: 50};
    var Vm_SM: voltage_units {pub: in, priv: out};
    var Ca_i: millimolar {pub: in, priv: out};
    var Ach: millimolar {pub: in};
    var m_NSCC_SM: dimensionless {priv: in};
    var f_ca_NSCC_SM: dimensionless;
    var rach_NSCC_SM: dimensionless;
    var RToF: voltage_units {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var time: time_units {pub: in, priv: out};
    f_ca_NSCC_SM = 1{dimensionless}/(1{dimensionless}+pow(Ca_i/0.0002{millimolar}, -4{dimensionless}));
    rach_NSCC_SM = 1{dimensionless}/(1{dimensionless}+0.01{millimolar}/Ach);
    I_NSCC_SM = G_max_NSCC_SM*m_NSCC_SM*f_ca_NSCC_SM*rach_NSCC_SM*(Vm_SM-E_NSCC);
  enddef;

  def group as encapsulation for
    comp SM_Membrane incl
      comp I_Na_SM incl
        comp m_Na_SM;
        comp h_Na_SM;
      endcomp;
      comp I_Ltype_SM incl
        comp d_Ltype_SM;
        comp f_Ltype_SM;
        comp f_ca_Ltype_SM;
      endcomp;
      comp I_LVA_SM incl
        comp d_LVA_SM;
        comp f_LVA_SM;
      endcomp;
      comp I_BK_SM incl
        comp d_BK_SM;
      endcomp;
      comp I_kr_SM incl
        comp xr1_SM;
        comp xr2_SM;
      endcomp;
      comp I_ka_SM incl
        comp xa1_SM;
        comp xa2_SM;
      endcomp;
      comp I_bk_SM;
      comp I_NSCC_SM incl
        comp m_NSCC_SM;
      endcomp;
      comp J_CaSR_SM;
    endcomp;
  enddef;
  def map between m_Na_SM and I_Na_SM for
    vars Vm_SM and Vm_SM;
    vars m_Na_SM and m_Na_SM;
    vars time and time;
    vars T_correction_Na and T_correction_Na;
  enddef;
  def map between h_Na_SM and I_Na_SM for
    vars Vm_SM and Vm_SM;
    vars h_Na_SM and h_Na_SM;
    vars time and time;
    vars T_correction_Na and T_correction_Na;
  enddef;
  def map between I_Na_SM and SM_Membrane for
    vars Na_i and Na_i;
    vars Vm_SM and Vm_SM;
    vars I_Na_SM and I_Na_SM;
    vars time and time;
    vars RToF and RToF;
    vars Na_o and Na_o;
    vars T_correction_Na and T_correction_Na;
  enddef;
  def map between d_Ltype_SM and I_Ltype_SM for
    vars Vm_SM and Vm_SM;
    vars d_Ltype_SM and d_Ltype_SM;
    vars time and time;
    vars T_correction_Ca and T_correction_Ca;
  enddef;
  def map between f_Ltype_SM and I_Ltype_SM for
    vars Vm_SM and Vm_SM;
    vars f_Ltype_SM and f_Ltype_SM;
    vars time and time;
    vars T_correction_Ca and T_correction_Ca;
  enddef;
  def map between f_ca_Ltype_SM and I_Ltype_SM for
    vars f_ca_Ltype_SM and f_ca_Ltype_SM;
    vars Ca_i and Ca_i;
    vars time and time;
    vars T_correction_Ca and T_correction_Ca;
  enddef;
  def map between I_Ltype_SM and SM_Membrane for
    vars Ca_i and Ca_i;
    vars Vm_SM and Vm_SM;
    vars I_Ltype_SM and I_Ltype_SM;
    vars time and time;
    vars RToF and RToF;
    vars Ca_o and Ca_o;
    vars T_correction_Ca and T_correction_Ca;
  enddef;
  def map between d_LVA_SM and I_LVA_SM for
    vars Vm_SM and Vm_SM;
    vars d_LVA_SM and d_LVA_SM;
    vars time and time;
    vars T_correction_Ca and T_correction_Ca;
  enddef;
  def map between f_LVA_SM and I_LVA_SM for
    vars Vm_SM and Vm_SM;
    vars f_LVA_SM and f_LVA_SM;
    vars time and time;
    vars T_correction_Ca and T_correction_Ca;
  enddef;
  def map between I_LVA_SM and SM_Membrane for
    vars Ca_i and Ca_i;
    vars Vm_SM and Vm_SM;
    vars I_LVA_SM and I_LVA_SM;
    vars time and time;
    vars RToF and RToF;
    vars Ca_o and Ca_o;
    vars T_correction_Ca and T_correction_Ca;
  enddef;
  def map between xr1_SM and I_kr_SM for
    vars Vm_SM and Vm_SM;
    vars xr1_SM and xr1_SM;
    vars time and time;
    vars T_correction_K and T_correction_K;
  enddef;
  def map between xr2_SM and I_kr_SM for
    vars Vm_SM and Vm_SM;
    vars xr2_SM and xr2_SM;
    vars time and time;
    vars T_correction_K and T_correction_K;
  enddef;
  def map between I_kr_SM and SM_Membrane for
    vars K_i and K_i;
    vars Vm_SM and Vm_SM;
    vars I_kr_SM and I_kr_SM;
    vars time and time;
    vars RToF and RToF;
    vars K_o and K_o;
    vars T_correction_K and T_correction_K;
  enddef;
  def map between xa1_SM and I_ka_SM for
    vars Vm_SM and Vm_SM;
    vars xa1_SM and xa1_SM;
    vars time and time;
    vars T_correction_K and T_correction_K;
  enddef;
  def map between xa2_SM and I_ka_SM for
    vars Vm_SM and Vm_SM;
    vars xa2_SM and xa2_SM;
    vars time and time;
    vars T_correction_K and T_correction_K;
  enddef;
  def map between I_ka_SM and SM_Membrane for
    vars K_i and K_i;
    vars Vm_SM and Vm_SM;
    vars I_ka_SM and I_ka_SM;
    vars time and time;
    vars RToF and RToF;
    vars K_o and K_o;
    vars T_correction_K and T_correction_K;
  enddef;
  def map between d_BK_SM and I_BK_SM for
    vars Vm_SM and Vm_SM;
    vars Ca_i and Ca_i;
    vars d_BK_SM and d_BK_SM;
    vars time and time;
  enddef;
  def map between I_BK_SM and SM_Membrane for
    vars K_i and K_i;
    vars Ca_i and Ca_i;
    vars Vm_SM and Vm_SM;
    vars I_BK_SM and I_BK_SM;
    vars time and time;
    vars RToF and RToF;
    vars K_o and K_o;
    vars T_correction_BK and T_correction_BK;
  enddef;
  def map between I_bk_SM and SM_Membrane for
    vars K_i and K_i;
    vars Vm_SM and Vm_SM;
    vars I_bk_SM and I_bk_SM;
    vars RToF and RToF;
    vars K_o and K_o;
  enddef;
  def map between m_NSCC_SM and I_NSCC_SM for
    vars Vm_SM and Vm_SM;
    vars m_NSCC_SM and m_NSCC_SM;
    vars time and time;
  enddef;
  def map between I_NSCC_SM and SM_Membrane for
    vars K_i and K_i;
    vars Na_i and Na_i;
    vars Vm_SM and Vm_SM;
    vars I_NSCC_SM and I_NSCC_SM;
    vars time and time;
    vars RToF and RToF;
    vars K_o and K_o;
    vars Na_o and Na_o;
    vars Ca_i and Ca_i;
    vars Ach and Ach;
  enddef;
  def map between J_CaSR_SM and SM_Membrane for
    vars J_CaSR_SM and J_CaSR_SM;
    vars Ca_i and Ca_i;
  enddef;
  def map between SM_Membrane and Environment for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
    vars K_o and K_o;
    vars RToF and RToF;
    vars FoRT and FoRT;
    vars F and F;
    vars T_correction_Ca and T_correction_Ca;
    vars T_correction_Na and T_correction_Na;
    vars T_correction_K and T_correction_K;
    vars T_correction_BK and T_correction_BK;
  enddef;
  def map between Time and SM_Membrane for
    vars time and time;
  enddef;
  def map between Gap_junction and I_stim for
    vars Gcouple and Gcouple;
  enddef;
  def map between I_stim and SM_Membrane for
    vars I_stim and I_stim;
  enddef;
  def map between I_stim and Time for
    vars time and time;
  enddef;
  def map between Neural_input and SM_Membrane for
    vars Ach and Ach;
  enddef;
enddef;
// rdf:#0977f4f9-8049-4ecd-9f95-6023c52b434e
// li: electrophysiology
// li: gastric
// li: smooth muscle
// li: ICC
// li: interstitial cells of Cajal
// rdf:#9c73ca47-a776-4599-82ae-23a4b1dd802a
// li: Given Alberto; Family Corrias
// li: Given Martin; Family Buist; Other L
// rdf:#d06b5f7f-e46a-401a-bbf2-d69424890530
// y-variable: simulation #simulation; iterationMethod newton; linearSolver dense; rest http://www.w3.org/2002/07/owl#Nothing; boundVariable #time; tabulationStepSize 10.0; endingValue 60.0e3; maximumStepSize 1; startingValue 0.0; multistepMethod bdf; simulationName SM with psuedo ICC stimulus; variable #INa
// colour: #ff0000
// line-type: 1
// x-variable: minimum 19.5e3; variable #time; simulation #simulation; maximum 32.0e3
// type: http://www.cellml.org/metadata/graphs/1.0#line
// #AP_IBK
// traces: rest http://www.w3.org/2002/07/owl#Nothing; simulation #simulation; variable #IBK; colour #ff0000; line-type 1; minimum 19.5e3; variable #time; simulation #simulation; maximum 32.0e3; type http://www.cellml.org/metadata/graphs/1.0#line
// background-colour: #ffffff
// y-label: Current (pA)
// x-label: Time (ms)
// rdf:#bd83516b-83b5-4054-add0-4e7296a7eac7
// y-variable: simulation #simulation; variable #Cai
// colour: #ff0000
// line-type: 1
// x-variable: minimum 19.5e3; variable #time; simulation #simulation; maximum 32.0e3
// type: http://www.cellml.org/metadata/graphs/1.0#line
// #ICC_stimulus
// comment: Here we define a periodic stimulus based on a psuedo ICC action potential. This stimulus protocol is used to test the model under a realistic stimulus protocol, but ideally such a stimulus would originate directly from an ICC cellular electrophysiology model. This stimulus protocol simply applies the psuedo ICC stimulus a fixed number of times.
// rdf:#c9fc9463-9563-474b-bea1-b5f01eb24231
// title: Annals of Biomedical Engineering
// rdf:#3b423a0f-79ec-4a38-9525-0b100af214a3
// W3CDTF: 2007-09-21
// rdf:#5780474b-949d-4b3c-a511-7aee58f16c73
// simulation: #simulation
// variable: #time
// rdf:#40499aa9-5125-4199-98f5-9c3abf0c658c
// Pubmed_id: 17486452
// JournalArticle: title A quantitative model of gastric smooth muscle cellular activation; volume 35; first_page 1595; W3CDTF 2007; last_page 1607
// rdf:#8b39b093-6388-46da-b00c-61c7135fabda
// y-variable: simulation #simulation; variable #Vm
// colour: #ff0000
// line-type: 1
// type: http://www.cellml.org/metadata/graphs/1.0#line
// rdf:#3744fa51-fd80-4fcc-8a60-cd445689464d
// rest: http://www.w3.org/2002/07/owl#Nothing
// rdf:#3ff557bf-3531-4dd7-88c9-0f73aa64d4c6
// rest: http://www.w3.org/2002/07/owl#Nothing
// rdf:#60065d76-13e7-4b34-9218-f877acc48268
// creator: FN Alberto Corrias
// value: This is a CellML description of all the ion channels and intracellular processes contained in the Corrias and Buist 2007 quantitative model of gastric smooth muscle cellular activation. This encoding of the model includes a stimulus current derived from a psuedo ICC action potential.
// rdf:#31a19f66-726c-4efd-8247-2d2c2e3c9af6
// rest: http://www.w3.org/2002/07/owl#Nothing
// rdf:#b248ac63-5eaa-4cef-97f3-79445cf5a456
// FN: Alberto Corrias
// rdf:#79382410-660e-4232-9bd7-e695d271d4fd
// y-variable: simulation #simulation; variable #I_stim
// colour: #ff0000
// line-type: 1
// x-variable: simulation #simulation; variable #time
// type: http://www.cellml.org/metadata/graphs/1.0#line
// rdf:#98c6dafd-7bfd-4ac1-a333-6cc503859bab
// value: The value of Q10 for Potassium channels (Q10K) was corrected from the value in the published paper (1.5). The correct value to be used is 1.365.
// rdf:#fdb520dd-e7a0-4c28-a63e-06868cc155dc
// simulation: #simulation
// variable: #IKr
// rdf:#5c9b76ea-df8c-4690-8e99-15dd239a053e
// rest: http://www.w3.org/2002/07/owl#Nothing
// rdf:#3ae7c3df-235b-46e0-a611-f938f3663fa9
// rest: http://www.w3.org/2002/07/owl#Nothing
// first: line-type 1; minimum 19.5e3; variable #time; simulation #simulation; maximum 32.0e3; label ILVA; colour #0000ff; simulation #simulation; variable #ILVA; type http://www.cellml.org/metadata/graphs/1.0#line
// rdf:#a813d857-f369-4b3a-8538-f126229b923d
// first: line-type 1; minimum 19.5e3; variable #time; simulation #simulation; maximum 32.0e3; label ICaL; colour #ff0000; simulation #simulation; variable #ICaL; type http://www.cellml.org/metadata/graphs/1.0#line
// rdf:#b64687f1-df70-45a3-bde2-995560fe9676
// colour: #ff0000
// line-type: 1
// x-variable: minimum 19.5e3; variable #time; simulation #simulation; maximum 32.0e3
// type: http://www.cellml.org/metadata/graphs/1.0#line
// rdf:#363b3051-197b-4921-9044-b647d3962d17
// modified: W3CDTF 2007-09-20
// value: Tidying up the electrical stimulus protocol and adding simulation and graphing metadata for my CellMLSimulator software.
// modifier: FN David Nickerson
// #AP_INa
// background-colour: #ffffff
// y-label: Current (pA)
// x-label: Time (ms)
// #AP_Cai
// background-colour: #ffffff
// y-label: [Ca]i (mM)
// x-label: Time (ms)
// #AP_IKr
// traces: rest http://www.w3.org/2002/07/owl#Nothing
// background-colour: #ffffff
// y-label: Current (pA)
// x-label: Time (ms)
// rdf:#1c47d531-2935-4f3f-8369-1819b231c45d
// simulation: #simulation
// variable: #IKA
// #membrane_potential_graph
// background-colour: #ffffff
// y-label: Membrane potential (mV)
// x-label: Time (ms)
// rdf:#d024d030-6aa0-4791-a460-5601273d61a2
// subject_type: keyword
// #AP_IKA
// traces: rest http://www.w3.org/2002/07/owl#Nothing; colour #ff0000; line-type 1; minimum 19.5e3; variable #time; simulation #simulation; maximum 32.0e3; type http://www.cellml.org/metadata/graphs/1.0#line
// background-colour: #ffffff
// y-label: Current (pA)
// x-label: Time (ms)
// #corrias_model_2007
// simulation: #simulation
// title: Corrias and Buist's 2007 quantitative model of gastric smooth muscle cellular electrophysiology.
// graph: #AP_Cai
// graph: #AP_IBK
// graph: #AP_ICa; background-colour #ffffff; y-label Current (pA); x-label Time (ms)
// graph: #AP_IKA
// graph: #AP_IKr
// graph: #AP_INa
// graph: #membrane_potential_graph
// graph: #stimulus_current_graph; background-colour #ffffff; y-label I_stim (pA); x-label Time (ms)
